---
API: 3
OpenSesame: 4.1.0
Platform: nt
---
set width 1663
set uniform_coordinates yes
set title "Pilot test"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1035
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 32
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\nynke\\Desktop\\MiCCS\\eyetracking"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define form_text_input age
	set timeout infinite
	set spacing 10
	set rows "1;1;6;1"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Please enter your age."
	set form_question ""
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=yes text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"
	widget 0 3 1 1 button text=Confirm


define logger age_logger
	set description "Logs experimental data"
	set auto_log no
	log ID
	log alpha
	log block
	log diff
	log dynamic
	log exposure
	log english
	log first_key_rt
	log first_key_timestamp
	log form_response
	log last_key_rt
	log rep
	log response
	log retrieval_t
	log rv_trial
	log swahili
	log time_block_sequence
	log time_block_loop
	log time_correct_answer
	log time_cue
	log time_fixation_cross
	log time_fixation_dot
	log time_incorrect_answer
	log time_keyboard
	log time_press_spacebar
	log time_study_screen
	log time_test_screen
	log trial

define logger answer_logger
	set description "Logs experimental data"
	set auto_log no
	log ID
	log alpha
	log block
	log diff
	log dynamic
	log exposure
	log english
	log first_key_rt
	log first_key_timestamp
	log form_response
	log last_key_rt
	log rep
	log response
	log retrieval_t
	log rv_trial
	log swahili
	log time_block_sequence
	log time_block_loop
	log time_correct_answer
	log time_cue
	log time_fixation_cross
	log time_fixation_dot
	log time_incorrect_answer
	log time_keyboard
	log time_press_spacebar
	log time_study_screen
	log time_test_screen
	log trial

define loop block_loop
	set source_file "shorter_seq_1.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 360
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 rep 0
	setcycle 0 block 1
	setcycle 0 swahili lugha
	setcycle 0 english language
	setcycle 0 alpha 0.211571212
	setcycle 0 ID 25
	setcycle 0 instruct ""
	setcycle 1 rep 0
	setcycle 1 block 1
	setcycle 1 swahili maumiva
	setcycle 1 english pain
	setcycle 1 alpha 0.230526563
	setcycle 1 ID 23
	setcycle 1 instruct ""
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	setcycle 5 rep 1
	setcycle 5 block 1
	setcycle 5 swahili mbwa
	setcycle 5 english dog
	setcycle 5 alpha 0.18435303
	setcycle 5 ID 29
	setcycle 5 instruct ""
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	setcycle 30 rep 2
	setcycle 30 block 1
	setcycle 30 swahili mbwa
	setcycle 30 english dog
	setcycle 30 alpha 0.18435303
	setcycle 30 ID 29
	setcycle 30 instruct ""
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	setcycle 45 rep 3
	setcycle 45 block 1
	setcycle 45 swahili skati
	setcycle 45 english skirt
	setcycle 45 alpha 0.167559091
	setcycle 45 ID 37
	setcycle 45 instruct ""
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	setcycle 60 rep 4
	setcycle 60 block 1
	setcycle 60 swahili tumbili
	setcycle 60 english monkey
	setcycle 60 alpha 0.230793846
	setcycle 60 ID 6
	setcycle 60 instruct ""
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	setcycle 75 rep 5
	setcycle 75 block 1
	setcycle 75 swahili baskeli
	setcycle 75 english bike
	setcycle 75 alpha 0.214457576
	setcycle 75 ID 20
	setcycle 75 instruct ""
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	setcycle 89 rep 5
	setcycle 89 block 1
	setcycle 89 swahili skati
	setcycle 89 english skirt
	setcycle 89 alpha 0.167559091
	setcycle 89 ID 37
	setcycle 89 instruct 1
	setcycle 90 rep 0
	setcycle 90 block 2
	setcycle 90 swahili adhama
	setcycle 90 english honor
	setcycle 90 alpha 0.225168182
	setcycle 90 ID 33
	setcycle 90 instruct ""
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	setcycle 105 rep 1
	setcycle 105 block 2
	setcycle 105 swahili anga
	setcycle 105 english sky
	setcycle 105 alpha 0.222377273
	setcycle 105 ID 27
	setcycle 105 instruct ""
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	setcycle 120 rep 2
	setcycle 120 block 2
	setcycle 120 swahili baskeli
	setcycle 120 english bike
	setcycle 120 alpha 0.214457576
	setcycle 120 ID 20
	setcycle 120 instruct ""
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	setcycle 135 rep 3
	setcycle 135 block 2
	setcycle 135 swahili baskeli
	setcycle 135 english bike
	setcycle 135 alpha 0.214457576
	setcycle 135 ID 20
	setcycle 135 instruct ""
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	setcycle 150 rep 4
	setcycle 150 block 2
	setcycle 150 swahili tumbili
	setcycle 150 english monkey
	setcycle 150 alpha 0.230793846
	setcycle 150 ID 6
	setcycle 150 instruct ""
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	setcycle 165 rep 5
	setcycle 165 block 2
	setcycle 165 swahili maumiva
	setcycle 165 english pain
	setcycle 165 alpha 0.230526563
	setcycle 165 ID 23
	setcycle 165 instruct ""
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	setcycle 179 rep 5
	setcycle 179 block 2
	setcycle 179 swahili skati
	setcycle 179 english skirt
	setcycle 179 alpha 0.167559091
	setcycle 179 ID 37
	setcycle 179 instruct 2
	setcycle 180 rep 0
	setcycle 180 block 3
	setcycle 180 swahili bibi
	setcycle 180 english grandmother
	setcycle 180 alpha 0.175557576
	setcycle 180 ID 34
	setcycle 180 instruct ""
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	setcycle 195 rep 1
	setcycle 195 block 3
	setcycle 195 swahili bibi
	setcycle 195 english grandmother
	setcycle 195 alpha 0.175557576
	setcycle 195 ID 34
	setcycle 195 instruct ""
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	setcycle 210 rep 2
	setcycle 210 block 3
	setcycle 210 swahili maliki
	setcycle 210 english king
	setcycle 210 alpha 0.232297015
	setcycle 210 ID 42
	setcycle 210 instruct ""
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	setcycle 225 rep 3
	setcycle 225 block 3
	setcycle 225 swahili anga
	setcycle 225 english sky
	setcycle 225 alpha 0.222377273
	setcycle 225 ID 27
	setcycle 225 instruct ""
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	setcycle 240 rep 4
	setcycle 240 block 3
	setcycle 240 swahili adhama
	setcycle 240 english honor
	setcycle 240 alpha 0.225168182
	setcycle 240 ID 33
	setcycle 240 instruct ""
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	setcycle 255 rep 5
	setcycle 255 block 3
	setcycle 255 swahili roho
	setcycle 255 english soul
	setcycle 255 alpha 0.199686567
	setcycle 255 ID 44
	setcycle 255 instruct ""
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	setcycle 270 rep 0
	setcycle 270 block 4
	setcycle 270 swahili jicho
	setcycle 270 english eye
	setcycle 270 alpha 0.210024615
	setcycle 270 ID 7
	setcycle 270 instruct ""
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	run block_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_pygaze_drift_correct False
	run new_inline_script True
	run study_trial_sequence True
	run done_block "[instruct] == 1"
	run new_1_inline_script True

define form_text_display break
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Break
	__form_text__
	You are finished with the first two blocks.
	Take a short break if you feel like it, 
	or continue with the experiment.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=yes text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad correct_answer
	set duration "[exposure]"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[swahili]" x=0 y=-100 z_index=0
	draw textline center=1 color=green font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Correct!" x=0 y=100 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=True text="[english]" x=0 y=0 z_index=0

define sketchpad cue
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[swahili]" x=0 y=-100 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Type the answer and confirm with spacebar " x=0 y=-284 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes name=response show_if=always text="" x=0 y=0 z_index=0

define form_base custom_gender_base
	set timeout infinite
	set spacing 10
	set rows "3;2;3"
	set only_render no
	set margins "100;100;100;100"
	set description "A generic form plug-in"
	set cols "1;2;2;2;1"
	set _theme gray
	widget 2 0 1 1 label text="Please pick which most applies to you"
	widget 1 1 1 1 button text=Male
	widget 2 1 1 1 button text=Female
	widget 3 1 1 1 button text=Other


define logger custom_gender_logger
	set description "Logs experimental data"
	set auto_log no
	log ID
	log alpha
	log block
	log diff
	log dynamic
	log exposure
	log english
	log first_key_rt
	log first_key_timestamp
	log form_response
	log last_key_rt
	log rep
	log response
	log retrieval_t
	log rv_trial
	log swahili
	log time_block_sequence
	log time_block_loop
	log time_correct_answer
	log time_cue
	log time_fixation_cross
	log time_fixation_dot
	log time_incorrect_answer
	log time_keyboard
	log time_press_spacebar
	log time_study_screen
	log time_test_screen
	log trial

define form_text_display done_block
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "You are done with this block!"
	__form_text__
	
	Next, you will study a new set of Swahili items.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=yes text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display end_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "100;100;100;100"
	set form_title "The experiment is now over."
	__form_text__
	Thank you for your participation!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=yes text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_pygaze_init True
	run set_eyetracker_filename True
	run age always
	run age_logger True
	run custom_gender_base True
	run custom_gender_logger True
	run instructions always
	run import True
	run block_loop always
	run eyetracker_stop True
	run end_of_experiment always

define inline_script eyetracker_logger
	set description "Executes Python code"
	___run__
	eyetracker.log("end of trial")
	__end__
	set _prepare ""

define inline_script eyetracker_stop
	set description "Executes Python code"
	___run__
	eyetracker.close()
	__end__
	set _prepare ""

define sketchpad fixation_cross
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=black show_if=True style="medium-cross" x=0 y=0 z_index=0

define sketchpad fixation_dot
	set duration "[rv_trial]"
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	set rows "1;2;1"
	set question ""
	__options__
	Male
	Female
	Other
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Please pick what applies to you."
	set description "A simple multiple choice item"
	set cols "1;1;1"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define logger gender_logger
	set description "Logs experimental data"
	set auto_log no
	log gender
	log form_response

define inline_script import
	set description "Executes Python code"
	___run__
	from scipy.stats import uniform
	rv = uniform(loc=400,scale=600)
	words_exposure = dict()
	__end__
	set _prepare ""

define sketchpad incorrect_answer
	set duration "[exposure]"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[swahili]" x=0 y=-100 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Incorrect!" x=0 y=100 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=True text="[english]" x=0 y=0 z_index=0

define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	In the following task you will learn Swahili words.
	
	
	First, you will see Swahili words with their English translation. 
	Press spacebar to move on if you have remembered the word.
	
	
	Later on during the experiment you will only see the Swahili word
	and can then enter its English translation.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=yes text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script intertrial_duration
	set description "Executes Python code"
	___run__
	eyetracker.log("start of trial")
	__end__
	___prepare__
	#Draws intertrial duration
	rv_trial=rv.rvs()
	exposure = 2965
	__end__

define inline_script keyboard
	set description "Executes Python code"
	___run__
	kb = Keyboard()
	c = items['cue'].canvas
	first_key_timestamp = None
	allowed_chars = 'abcdefghijklmnopqrstuvwxyz'
	while True:
		key, timestamp = kb.get_key()
		if key == 'space' and len(c['response'].text)>0:
			break
		if first_key_timestamp is None:
			first_key_timestamp = timestamp
		# Backspace later
		if key == 'backspace' and len(c['response'].text)>0:
			c['response'].text = c['response'].text[:-1]
		#Backspace first
		elif key == 'backspace' and len(c['response'].text)==0:
			c.show()
		#Allowed first
		elif len(c['response'].text)==0 and key.lower() in allowed_chars:
			c['response'].text = key
		#Allowed later
		elif key.lower() in allowed_chars:
			c['response'].text += key
		c.show()
	first_key_rt = first_key_timestamp - time_cue
	last_key_rt = timestamp - time_cue
	response = c['response'].text
	
	if dynamic == 1:
	    if response == english:
	        words_exposure[english] -= 500
	    else:
	        words_exposure[english] += 1000
	    
	    if words_exposure[english] < 0:
	        words_exposure[english] = 0
	    
	    exposure = words_exposure[english]
	
	eyetracker.log_var("diff", var.diff)
	eyetracker.log_var("exposure", var.exposure)
	eyetracker.log_var("english", var.english)
	eyetracker.log_var("form_response", var.form_response)
	eyetracker.log_var("rep", var.rep)
	eyetracker.log_var("response", var.response)
	eyetracker.log_var("rv_trial", var.rv_trial)
	eyetracker.log_var("swahili", var.swahili)
	eyetracker.log_var("trial", var.trial)
	__end__
	set _prepare ""

define inline_script new_1_inline_script
	set description "Executes Python code"
	___run__
	eyetracker.stop_recording()
	eyetracker.log("Stopped recording")
	__end__
	set _prepare ""

define logger new_1_logger
	set description "Logs experimental data"
	set auto_log no
	log ID
	log alpha
	log block
	log diff
	log dynamic
	log exposure
	log english
	log first_key_rt
	log first_key_timestamp
	log form_response
	log last_key_rt
	log rep
	log response
	log retrieval_t
	log rv_trial
	log swahili
	log time_block_sequence
	log time_block_loop
	log time_correct_answer
	log time_cue
	log time_fixation_cross
	log time_fixation_dot
	log time_incorrect_answer
	log time_keyboard
	log time_press_spacebar
	log time_study_screen
	log time_test_screen
	log trial

define form_base new_form_base
	set timeout infinite
	set spacing 10
	set rows "2;2"
	set only_render no
	set margins "50;50;50;50"
	set description "A generic form plug-in"
	set cols "2;2"
	set _theme gray


define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	eyetracker.start_recording()
	__end__
	set _prepare ""

define pygaze_drift_correct new_pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Performs eye-tracker drift correction"

define pygaze_init new_pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode diameter
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_log new_pygaze_log
	set throttle 2
	set msg "test log item"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker out of recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define inline_script press_spacebar
	set description "Executes Python code"
	___run__
	kb = Keyboard()
	retrieval_t=None
	while True:
		key, t1 = kb.get_key()
		if key == 'space':
			retrieval_t=t1
			break
	
	if rep == 0:
	    words_exposure[english] = 2965
	    retrieval_t = retrieval_t - time_study_screen
	else:
	    retrieval_t = retrieval_t - time_test_screen
	
	eyetracker.log('test message')
	eyetracker.log_var("block", var.block)
	eyetracker.log_var("dynamic", var.dynamic)
	__end__
	set _prepare ""

define pygaze_start_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Puts the eye tracker out of recording mode"

define inline_script set_eyetracker_filename
	set description "Executes Python code"
	___run__
	eyetracker.send_command(f"open_data_file mCCS{var.subject_nr}.EDF")
	__end__
	set _prepare ""

define sketchpad study_screen
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[swahili]" x=0 y=-100 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press spacebar to continue<br />" x=0 y=-284 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes name=response show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[english]" x=0 y=-4 z_index=0

define sequence study_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run intertrial_duration True
	run fixation_dot always
	run study_screen "[rep] == 0"
	run test_screen "[rep] != 0"
	run press_spacebar always
	run fixation_cross "[rep] == 0"
	run cue always
	run keyboard always
	run correct_answer "[response] == [english]"
	run incorrect_answer "[response] != [english]"
	run answer_logger True
	run eyetracker_logger True

define sketchpad test_screen
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[swahili]" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press spacebar once you know the answer" x=0 y=-284 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes name=response show_if=always text="" x=0 y=0 z_index=0

